//If you want to change an expvariable, then it will change it for the experiment
//If you want to change a variable that is set by an expvariable, then all the experiments will be untouched and you will just change the baseline
//If you change a variable that the experiments don't set, you change it for everything so be careful

load_file("nrngui.hoc")

expnumSACs=1              
expbipG1=1
expbipG2=.2
exptstop=1000
expcontrast=1
expangle=0
expbipspeed=2
nodends=0


GanglionExperiment=0
SingleSACExperiment=0
SingleSACDingExperiment=0
TwoSACLeeExperiment=0
clchannelcheck=0
SingleSACVGCCExperiment=1



if (GanglionExperiment){ 
    nodends=0
    ssdist=60
    griddim=300/ssdist +5
    //expnumSACs=1
    expnumSACs=griddim*griddim

    expangle=0
    expcontrast=3
    expbipspeed=2
}
if (SingleSACExperiment){
    expnumSACs=1
    exptstop=800
    expcontrast=2
    
}
if (SingleSACDingExperiment){
    expnumSACs=1
    exptstop=800
    expcontrast=3
}
if(TwoSACLeeExperiment){
    expnumSACs=2
    expbipG1=0
    expbipG2=0
    exptstop=1500
}
if(clchannelcheck){
    expnumSACs=2
    exptstop=1500
}
if (SingleSACVGCCExperiment){
    exptstop=300
    expbipG1=0
    expbipG2=0
    expnumSACs=1

}
//-----------------------------------BEGIN PARAMETERS
tstop=exptstop
//SAC cell morphology
numGen=4
numFirst=6
numDend=0
numInner=0
somaL=10
dendD0=.5
dendL=140
dendD1=0.2

for igen=0,numGen-1{
numDend+=numFirst*2^(igen)
}
numOutside=numFirst*2^(numGen-1)
numInside=numDend-numOutside

//bip placement
amountoflowcontrast=1
bipDensity=15
bipMaxDist=100

bipG1=expbipG1/expcontrast    //expcontrast
bipG2=expbipG2/expcontrast

    //miu meters per millisecond
bipspeed=expbipspeed

//SAC building
objectvar thetas
numSACs=expnumSACs
thetas = new Vector(numSACs)
for i=0,numSACs-1{
    thetas.x[i]=expangle
  
}
SACmaxDist=30
clchannelthres=.008
cachannelshift=56
cachannelg=.0005

objectvar Xorg, Yorg
objectvar ranCord

if(TwoSACLeeExperiment||clchannelcheck){
    Xorg= new Vector(numSACs,0)
    Yorg= new Vector(numSACs,0)
    Xorg.x[1]=120
}else if(GanglionExperiment){
    /*
    Xorg= new Vector(numSACs,0)
    Yorg= new Vector(numSACs,0)
    Xorg.x[0]=60
    Yorg.x[0]=60
    */
    /*
    Xorg= new Vector(numSACs,0)
    Yorg= new Vector()

    for irow=0,griddim-1 {
        for i=0,griddim-1{
            Yorg.append(irow*ssdist)
        }
    }
    for icol=0,griddim-1{
        for i=0,griddim-1{
        Xorg.x[icol+griddim*i]=(icol*ssdist)
        }
    }
    likelySAC=.1
    */
    
    ranCord=new Random()
    ranCord.uniform(0,(griddim-1)*ssdist)

    Xorg=new Vector(numSACs)
    Yorg=new Vector(numSACs)
    for i=0, numSACs-1{
        Xorg.x[i]=ranCord.repick()
        Yorg.x[i]=ranCord.repick()
    }
}else{
    Xorg= new Vector(numSACs,0)
    Yorg= new Vector(numSACs,0)
}

//Gang building
gangL=150
numgangDend=12
SACgangDist=15

CalciumConductance=.05
//-------------------------------END PARAMETERS
//-------------------------------declare some objectvars
numclamps=2 
top=14
objectvar testg, testg2, g6, g5, g7, g8, g9, g4, testg4, testg3, SAC[numSACs], fileob, g, voltagevec, timevec, maxdifvec, clamps[numclamps], clampcurrent, without[top], with[top]
objectvar voltagejumps, randSAC, Gang, temp, currentmaxs, differencemin, List1, List2, temp2, difference[top], Simple, vec1, vec2
testg=new Vector()
testg2=new Vector()
testg3=new Vector()
testg4=new Vector()
g4=new Graph()
g6=new Graph()
g5=new Graph()
g7=new Graph()
g8=new Graph()
g9=new Graph()
fileob= new File()
g=new Graph()
voltagevec=new Vector()
timevec= new Vector()
maxdifvec=new Vector()
clampcurrent=new Vector()
currentmaxs=new Vector()
voltagejumps=new Vector()
randSAC=new Random()
randSAC.uniform(0,1)
differencemin=new Vector()
for i=0, top-1{
    without[i]=new Vector()
    with[i]=new Vector()
    difference=new Vector()
}
List1=new List()
List2=new List()
vec1=new Vector()
vec2=new Vector()



load_file("BuildSAC.hoc")
load_file("Delay&ConnectSAC.hoc")
load_file("testingSAC.hoc")
//------------------------------------------EXPERIMENTS

if(GanglionExperiment){
    //-----------------------------------------------BUILDING PHASE
    print "GanglionExperiment"
    running=0
    //experiments to choose from
    ds=0
    vclamping=0
    printaboutconnections=1
    {}
        gango=((griddim)*ssdist/2)
        Gang=new ganglion(gango,gango)
        build()
        if(nodends){break}
        delay()
        connecting()
        gangdelay()

        if(vclamping){
            access Gang.soma  
            clamps[0]=new VClamp(.5)
            clamps[0].dur[0]=tstop
            clamps[0].amp[0]=0
            /* to turn off bip synapses
            for ibipSyn=0, Gang.bipSynapses.count()-1{
                Gang.bipSynapses.object(ibipSyn).g1max=0
                Gang.bipSynapses.object(ibipSyn).g2max=0
            }
            */
        }

        //Connect gang and SACs 
            
        for i2=0, numSACs-1{           //over all varicosities
            for ivari=0, SAC[i2].VrecList.count()-1{
                x=SAC[i2].VrecXpos.get(ivari)
                y=SAC[i2].VrecYpos.get(ivari)
                relx=x-gango
                rely=y-gango
                if(sqrt(relx*relx+rely*rely)< gangL+SACgangDist){
                    for idend=0, numgangDend-1 {               //over all dendrites
                        access Gang.dend[idend]
                        ang=idend*(2*PI)/numgangDend
                        sameside=1
                        if (abs(sin(ang))<.05){
                            thres=SACgangDist
                            prime=rely
                            slidethres=-SACgangDist
                            inquestion=relx
                            if(abs(ang-PI)<.05){
                                inquestion=-inquestion
                            }
                        }else{
                            if(abs(cos(ang))<.1){
                                prime=relx
                                thres=(SACgangDist/sin (ang))
                            }else{
                                if(abs(sin(ang))<.7){
                                    thres=SACgangDist/cos(ang)
                                    prime=abs((relx/cos(ang)))-abs(rely)
                                    if (relx!=0){
                                        if((cos(ang)/relx)<0){sameside=0}
                                    }
                                }else{
                                    thres=(SACgangDist/sin (ang))
                                    prime=(relx-(rely/(sin(ang)/cos(ang))))
                                }
                            }
                            slidethres=(-SACgangDist)/sin(ang)
                            inquestion=rely
                            if(sin(ang)<0){
                            inquestion=-inquestion
                            slidethres=-slidethres
                            }
                        }
                        if(abs(prime)<=abs(thres)&&inquestion>=slidethres&&sameside){
                            place=sqrt(relx*relx+rely*rely)/gangL
                            if (place>1){place=1}
                            access Gang.dend[idend]
                            xplace=gango+(x3d(1)-x3d(0))*place
                            yplace=gango+ (y3d(1)-y3d(0))*place
                            yy=yplace-Yorg.x[i2]
                            xx=xplace-Xorg.x[i2]

                            indep=(atan2(yy,xx))
                            dep= (1/sqrt(2*PI*3))*exp(-(indep*indep*indep*indep*indep*indep*indep*indep)/(2*3))
                            likelySAC=.06+(dep*4.1)

                            if(abs(atan2(yy,xx))>(3*PI/4)){  //pd
                                either=2
                            }else   if(abs(atan2(yy,xx))<(PI/4)){ //nd
                                either=0
                            }else{
                                either=1
                            }
                            if(randSAC.repick()<likelySAC ){

                                temp=new ComplexCl2g(place)
                                setpointer temp.capre, SAC[i2].dend[42+ivari].cai(.8)
                                Gang.receivesCl[idend].append (temp)
                                SAC[i2].gangConnects.x[either]=SAC[i2].gangConnects.x[either]+1
                                temp= new Vector(3)
                                temp.x[0]=i2
                                temp.x[1]=idend
                                temp.x[2]=indep
                                Gang.fromList.append(temp)
                                
                            }
                        }   
                    }
                }
            }
        
        
        }
        //---------------------------------------------------EXPERIMENTAL SETUP PHASE
        if(printaboutconnections){
            sacconnects=0
            for iS= 0, griddim*griddim-1{
                sacconnects=sacconnects+SAC[iS].receivesCl.count()
                averagenuminputs=sacconnects/(griddim*griddim)
            }
            print "average number of inputs to a SAC ", averagenuminputs

            fileob.wopen("GangExperimentConnectionTest.txt")
            for i=0, Gang.fromList.count()-1{
                i2=Gang.fromList.object(i).x[0] //which SAC
                fileob.printf("%g %g %g \n", Xorg.x[i2], Yorg.x[i2], Gang.fromList.object(i).x[2])
            }
            fileob.close()

            pdtotal=0
            ndtotal=0
            btwtotal=0
            sactotal=0
            for i2=0, numSACs-1{
                ndtotal=ndtotal+SAC[i2].gangConnects.x[0]
                pdtotal=pdtotal+SAC[i2].gangConnects.x[2]
                btwtotal=btwtotal+SAC[i2].gangConnects.x[1]
                if(SAC[i2].gangConnects.x[0]>0||SAC[i2].gangConnects.x[1]>0){
                    sactotal+=1
                }
            }
            print"totals ", sactotal, ndtotal, btwtotal,pdtotal
        }
        if(vclamping){
            clampcurrent.record(&clamps[0].i,1) //record from ganglion soma
        }
    if (ds){
        voltagevec.record(&Gang.soma.v(.5),1)
    }

    //----------------------------------------------RUNNING EXPERIMENT PHASE
    if(running){
        if(vclamping){
            run()
            fileob.wopen("GangExperimentIPSC.txt")
            for i=0, clampcurrent.size()-1{
                fileob.printf("%g \n",clampcurrent.x[i])
            }
            fileob.close()
        }
        if(ds){

        }
    }
}
if(clchannelcheck){
    build()
    delay()
    connecting()

    a=0                         //cd synapse onto ab
    b=0
    c=SAC[a].fromList.object[b].x[0]
    d=SAC[a].fromList.object[b].x[1]
    testg.record(&SAC[a].receivesCl.object(b).capre,1)
    run()
    graphG5()
    graphG6()
}
if(TwoSACLeeExperiment){
    takingtrace=1
    vto=-25

    build()
    connecting()
        //clamp setup 
        del=500
        dur=200
        access SAC[0].soma
        clamps[0]=new VClamp(.5)
        clamps[0].dur[0]=tstop
        clamps[0].amp[0]=0

        access SAC[1].soma
        clamps[1]=new VClamp(.5)
        clamps[1].dur[0]=del
        clamps[1].amp[0]=-70
        clamps[1].dur[1]=dur
        clamps[1].dur[2]=tstop-del-dur
        clamps[1].amp[2]=-70

        clampcurrent.record(&clamps[0].i,1) //record from postsyn soma
        if(takingtrace){
            a=0                         //cd synapse onto ab
            b=0
            c=SAC[a].fromList.object[b].x[0]
            d=SAC[a].fromList.object[b].x[1]
            testg.record(&SAC[a].receivesCl.object(b).probrelease,1)
            print "abcd", a, b, c, d

            testg2.record(&SAC[a].receivesCl.object(b).numreleased,1)
            testg3.record(&SAC[a].receivesCl.object(b).i,1)
            testg4.record(&SAC[a].receivesCl.object(b).capre,1)

        
            clamps[1].amp[1]=vto
            run()
            fileob.wopen("TwoSACExperimentLeeITrace.txt")
            for i=0, clampcurrent.size()-1{
                fileob.printf("%g \n",clampcurrent.x[i])
            }
            fileob.close()
            graphG8()
            graphG6()
            graphG7()
            graphG5()
            graphG9()
        }else{
            for i2=0, 9{              
                clamps[1].amp[1]=-65+10*i2
                run()
                voltagejumps.append(clamps[1].amp[1])
                currentmaxs.append(clampcurrent.max(4, tstop)-clampcurrent.x[del/2])
            }
            fileob.wopen("TwoSACExperimentLeeImaxes.txt")
            for i=0, currentmaxs.size()-1{
                fileob.printf("%g %g \n", voltagejumps.x[i], currentmaxs.x[i])
            }
            fileob.close()
        }

       
    
}

if (SingleSACDingExperiment){
    takingtrace=0  //are we taking a trace
    whichvar=65-numInside    // if so, of which varicosity
    tracepd=0 //in the preferred direction or no?

    build()
    savetrueangle()
    choiceSAC=0

    if (takingtrace) {        //how we loop
        startl=whichvar
        finishl=whichvar
    }else{
        startl=0
        finishl=SAC[choiceSAC].trueAngle.size()-1
    }

    for k=startl, finishl{
        thetas.x[choiceSAC]= SAC[choiceSAC].trueAngle.get(k)
        print "theta is ", thetas.x[choiceSAC] 
        delay()
        run()
        pdCAi=SAC[choiceSAC].CAIrecList.object(k).max()
        print pdCAi
        if(tracepd){break} //what we are tracing

        if(SAC[choiceSAC].trueAngle.get(k)>0){
            thetas.x[choiceSAC]= SAC[choiceSAC].trueAngle.get(k)-PI
        }else{
            thetas.x[choiceSAC]= SAC[choiceSAC].trueAngle.get(k)+PI
        }
        print "theta is ", thetas.x[choiceSAC]
        delay()
        run()
        ndCAi=SAC[choiceSAC].CAIrecList.object(k).max()
        print ndCAi
        dsi=(pdCAi-ndCAi)/pdCAi
        print"dsi", dsi
        if(takingtrace==0){maxdifvec.append(dsi)}
    }
    if(takingtrace){  //what we graph
        fileob.wopen("SingleSACDingExperimentCaTrace.txt")
        for i=0, SAC[choiceSAC].CAIrecList.object(k).size()-1{
            fileob.printf("  %g \n", SAC[choiceSAC].CAIrecList.object(k).x[i] )
        }
        fileob.close()
    }else{
        fileob.wopen("SingleSACDingExperimentDSI.txt")
        for i=0, maxdifvec.size()-1{
            fileob.printf(" %g \n", maxdifvec.x[i])
        }
        fileob.close()
        print "mean", (maxdifvec.mean()), "std", (maxdifvec.stdev())

    }
}

if(SingleSACExperiment){
    build()
    delay()
    savevariangle()

    xopen("AlphaSyn3.ses")

    testg.record(&SAC[0].bipSynapses.object(83).i,1)  
    timevec.record(&t)
    run()
    //current trace graph
    graphG6()
    fileob.wopen("SingleSACExperimentITrace.txt")
    for i=0, testg.size()-1{
        fileob.printf("%g \n", testg.x[i])
    }
    fileob.close()

    //maxvoltage vs angle
    chosenSAC=0
    graphAngleCA()
    for w=0, SAC[chosenSAC].variAngle.size()-1{
        num= SAC[chosenSAC].VrecList.object(w).max()
        voltagevec.append(num)
    }
    fileob.wopen("SingleSACExperimentVvsAngle.txt")
    for i=0,SAC[chosenSAC].variAngle.size()-1{
        fileob.printf("%g %g \n",SAC[chosenSAC].variAngle.x[i],voltagevec.x[i] )
    }
    fileob.close()

    //Voltage Trace 
    
    chosenDend=73-numInside //43

    fileob.wopen("SingleSACExperimentVTrace.txt")
    for i=0, SAC[chosenSAC].VrecList.object(chosenDend).size()-2{
        fileob.printf("%g  %g \n",timevec.x[i], SAC[chosenSAC].VrecList.object(chosenDend).x[i] )
    }
    fileob.close()

   
}

if (SingleSACVGCCExperiment){
    print"SingleSACVGCCExperiment"
    ivsv=1
    bottom=-60
    inc=5
    vinquestion=-20
    vnum=(vinquestion-bottom)/inc
    tdel=100
    
    build()
    access SAC[0].soma
    clamps[0]=new VClamp(.5)
        clamps[0].dur[0]=tdel
        clamps[0].dur[1]=100
        clamps[0].dur[2]=tstop-tdel-100
        clamps[0].amp[2]=bottom
        clamps[0].amp[0]=bottom

    temp=new Vector()
    if(ivsv){                           //--------------ivsv
        for idend=0, SAC[i2].VrecList.count()-1{
            access SAC[0].dend[42+idend]
            gbar_calrgc=0
        }
        for i=1, top{
            clamps[0].amp[1]=bottom+inc*i
            temp2=new Vector()
            temp2.record(&clamps[0].i,1)
            run()
            without[i-1].copy(temp2)
            
        }
    
        for idend=0, SAC[i2].VrecList.count()-1{
            access SAC[0].dend[42+idend]
            gbar_calrgc=.0005
        }
        temp=new Vector()

        for i=1, top{
            clamps[0].amp[1]=bottom+inc*i
            temp2=new Vector()
            temp2.record(&clamps[0].i,1)
            run()
            with[i-1].copy(temp2)
        }

        for i=0, top-1{
            difference[i]=with[i].c.sub(without[i])

        }
    
        fileob.wopen("SingleSACVGCCExperimentIvsV.txt")
        for i=0, top-1{
            fileob.printf("%g %g \n", bottom+(i+1)*inc, difference[i].x[150] )
        }
        fileob.close()  
        
        fileob.wopen("SingleSACVGCCExperimentITrace.txt")
        for i=0, tstop-1{
            fileob.printf("%g %g %g \n", with[vnum-1].x[i], without[vnum-1].x[i], difference[vnum-1].x[i])
        }
        fileob.close()
    }else{                                 //----------otherwise
        for idend=0, SAC[i2].VrecList.count()-1{
            access SAC[0].dend[42+idend]
            gbar_calrgc=.0005
        }
        temp=new Vector()

        for i=0, top{
            clamps[0].amp[1]=bottom+inc*i
            access SAC[0].dend[42]
            testg.record(&m_calrgc(.8),1)
            testg2.record(&ica_calrgc(.8),1)
            run()
            vec1.append(testg.x[150])
            vec2.append(testg2.x[150])
        }
    
    
        fileob.wopen("SingleSACVGCCExperimentTestvsV.txt")
        for i=0, top-1{
            fileob.printf("%g %g %g \n", bottom+(i+1)*inc, vec1.x[i], vec2.x[i] )
        }
        fileob.close() 
        
        graphG6()
        graphG7()
    }
}

